
//  ******************************************************
//
//     File generated by: neuroConstruct v1.7.1
//
//     Generally replicates hoc for Cell Type as exported from
//     NEURON's Cell Builder, together with some neuroConstruct
//     specific helper/info procedures, e.g. toString(), netInfo()
//
//  ******************************************************


begintemplate DeepLTSInter

public init, topol, basic_shape, subsets, geom, memb
public synlist, x, y, z, position, connect2target

public reference, type, description, name
strdef reference, type, description, name

public toString, netInfo

public all

objref synlist
objref all
objref stringFuncs

public ModelViewParmSubset_1
objref ModelViewParmSubset_1
public ModelViewParmSubset_4
objref ModelViewParmSubset_4
public OneSecGrp_SectionRef_1
objref OneSecGrp_SectionRef_1
public soma_group
objref soma_group
public prox_dend_soma
objref prox_dend_soma
public prox_mid_dends
objref prox_mid_dends
public ModelViewParmSubset_2
objref ModelViewParmSubset_2
public axon_group
objref axon_group
public prox_axon
objref prox_axon
public dendrite_group
objref dendrite_group
public ModelViewParmSubset_3
objref ModelViewParmSubset_3
public prox_dend
objref prox_dend
public mid_dend
objref mid_dend
public ModelViewParmSubset_5
objref ModelViewParmSubset_5
public gap_dend
objref gap_dend
public mid_tip_dends
objref mid_tip_dends
public mid_tip_plus_dends
objref mid_tip_plus_dends
public mid_dist_dends
objref mid_dist_dends
public distal_axon
objref distal_axon

proc init() {
    topol()
    subsets()
    geom()
    biophys()
    geom_nseg()
    synlist = new List()
    x = y = z = 0
    //reference = $s1
    //type = $s2
    //description = $s3

    strdef indexNum
    stringFuncs = new StringFunctions()
    stringFuncs.tail(reference, "_", indexNum)
    while (stringFuncs.substr( indexNum, "_")>=0) {
        stringFuncs.tail(indexNum, "_", indexNum)
    }

    sprint(name, "%s", type)
}

create comp_1
public comp_1
create comp_54
public comp_54
create comp_41
public comp_41
create comp_28
public comp_28
create comp_15
public comp_15
create comp_2
public comp_2
create comp_55
public comp_55
create comp_43
public comp_43
create comp_42
public comp_42
create comp_30
public comp_30
create comp_29
public comp_29
create comp_17
public comp_17
create comp_16
public comp_16
create comp_4
public comp_4
create comp_3
public comp_3
create comp_58
public comp_58
create comp_56
public comp_56
create comp_46
public comp_46
create comp_45
public comp_45
create comp_44
public comp_44
create comp_33
public comp_33
create comp_32
public comp_32
create comp_31
public comp_31
create comp_20
public comp_20
create comp_19
public comp_19
create comp_18
public comp_18
create comp_7
public comp_7
create comp_6
public comp_6
create comp_5
public comp_5
create comp_59
public comp_59
create comp_57
public comp_57
create comp_49
public comp_49
create comp_48
public comp_48
create comp_47
public comp_47
create comp_36
public comp_36
create comp_35
public comp_35
create comp_34
public comp_34
create comp_23
public comp_23
create comp_22
public comp_22
create comp_21
public comp_21
create comp_10
public comp_10
create comp_9
public comp_9
create comp_8
public comp_8
create comp_50
public comp_50
create comp_37
public comp_37
create comp_24
public comp_24
create comp_11
public comp_11
create comp_51
public comp_51
create comp_38
public comp_38
create comp_25
public comp_25
create comp_12
public comp_12
create comp_52
public comp_52
create comp_39
public comp_39
create comp_26
public comp_26
create comp_13
public comp_13
create comp_53
public comp_53
create comp_40
public comp_40
create comp_27
public comp_27
create comp_14
public comp_14

proc topol() {
    connect comp_54(0), comp_1(0.0)
    connect comp_41(0), comp_1(1.0)
    connect comp_28(0), comp_1(1.0)
    connect comp_15(0), comp_1(1.0)
    connect comp_2(0), comp_1(1.0)
    connect comp_55(0), comp_54(1.0)
    connect comp_43(0), comp_41(1.0)
    connect comp_42(0), comp_41(1.0)
    connect comp_30(0), comp_28(1.0)
    connect comp_29(0), comp_28(1.0)
    connect comp_17(0), comp_15(1.0)
    connect comp_16(0), comp_15(1.0)
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    basic_shape()
}

proc basic_shape() {
basic_shape_extra_0()
basic_shape_extra_1()
}

proc basic_shape_extra_0(){
    comp_1 {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 15.0) pt3dadd(0.0, 10.0, 0.0, 15.0)}
    comp_1 {pt3dadd(-4.371139E-7, 20.0, 0.0, 15.0)}
    comp_54 {pt3dclear() pt3dadd(4.371139E-7, 0.0, 0.0, 1.4) pt3dadd(-3.7745E-7, -25.0, 0.0, 1.4)}
    comp_54 {pt3dadd(-1.1920139E-6, -50.0, 0.0, 1.4)}
    comp_41 {pt3dclear() pt3dadd(0.0, 20.0, 0.0, 2.12) pt3dadd(-16.0, 8.0, 0.0, 2.12)}
    comp_41 {pt3dadd(-32.0, -4.0, 0.0, 2.12)}
    comp_28 {pt3dclear() pt3dadd(0.0, 20.0, 0.0, 2.12) pt3dadd(16.0, 8.0, 0.0, 2.12)}
    comp_28 {pt3dadd(32.0, -4.0, 0.0, 2.12)}
    comp_15 {pt3dclear() pt3dadd(0.0, 20.0, 0.0, 2.12) pt3dadd(0.0, 32.0, -16.0, 2.12)}
    comp_15 {pt3dadd(0.0, 44.0, -32.0, 2.12)}
    comp_2 {pt3dclear() pt3dadd(0.0, 20.0, 0.0, 2.12) pt3dadd(0.0, 32.0, 16.0, 2.12)}
    comp_2 {pt3dadd(0.0, 44.0, 32.0, 2.12)}
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}

proc basic_shape_extra_1(){
    comp_12 {pt3dclear() pt3dadd(3.6693433E-5, 164.00029, 136.00023, 0.837945) pt3dadd(1.4269038E-4, 179.99968, 147.99976, 0.837945)}
    comp_12 {pt3dadd(-1.15835806E-4, 195.99976, 159.99988, 0.837945)}
    comp_52 {pt3dclear() pt3dadd(-160.0007, -155.99886, -8.9160044E-4, 0.837945) pt3dadd(-172.0008, -171.99857, -0.0010713129, 0.837945)}
    comp_52 {pt3dadd(-184.00107, -187.99918, -9.6784125E-4, 0.837945)}
    comp_39 {pt3dclear() pt3dadd(160.00012, -155.99953, 0.0, 0.837945) pt3dadd(172.00076, -171.99973, 0.0, 0.837945)}
    comp_39 {pt3dadd(184.0004, -187.99992, 0.0, 0.837945)}
    comp_26 {pt3dclear() pt3dadd(-6.185023E-4, 195.9998, -159.99991, 0.837945) pt3dadd(-7.454591E-4, 211.99959, -171.99977, 0.837945)}
    comp_26 {pt3dadd(-8.9209125E-4, 227.99937, -183.99963, 0.837945)}
    comp_13 {pt3dclear() pt3dadd(-1.15835806E-4, 195.99976, 159.99988, 0.837945) pt3dadd(-3.677581E-4, 211.99985, 172.0, 0.837945)}
    comp_13 {pt3dadd(-6.1248185E-4, 227.99992, 184.00015, 0.837945)}
    comp_53 {pt3dclear() pt3dadd(-184.00107, -187.99918, -9.6784125E-4, 0.837945) pt3dadd(-196.00117, -203.99889, -0.0011438904, 0.837945)}
    comp_53 {pt3dadd(-208.00125, -219.99861, -0.0013205758, 0.837945)}
    comp_40 {pt3dclear() pt3dadd(184.0004, -187.99992, 0.0, 0.837945) pt3dadd(196.0011, -203.99918, 0.0, 0.837945)}
    comp_40 {pt3dadd(208.00076, -219.99939, 0.0, 0.837945)}
    comp_27 {pt3dclear() pt3dadd(-8.9209125E-4, 227.99937, -183.99963, 0.837945) pt3dadd(-8.054877E-4, 244.0003, -196.00034, 0.837945)}
    comp_27 {pt3dadd(-9.225024E-4, 260.00012, -208.00021, 0.837945)}
    comp_14 {pt3dclear() pt3dadd(-6.1248185E-4, 227.99992, 184.00015, 0.837945) pt3dadd(-8.7018224E-4, 244.00003, 196.00026, 0.837945)}
    comp_14 {pt3dadd(1.5117969E-4, 259.9998, 207.99985, 0.837945)}
}

proc subsets() { local i

    all = new SectionList()
subsets_extra_0()
subsets_extra_1()
subsets_extra_2()
subsets_extra_3()
subsets_extra_4()
subsets_extra_5()
}

proc subsets_extra_0(){


    ModelViewParmSubset_1 = new SectionList()

    comp_1 ModelViewParmSubset_1.append()
    comp_41 ModelViewParmSubset_1.append()
    comp_28 ModelViewParmSubset_1.append()
    comp_15 ModelViewParmSubset_1.append()
    comp_2 ModelViewParmSubset_1.append()
    comp_43 ModelViewParmSubset_1.append()
    comp_42 ModelViewParmSubset_1.append()
    comp_30 ModelViewParmSubset_1.append()
    comp_29 ModelViewParmSubset_1.append()
    comp_17 ModelViewParmSubset_1.append()
    comp_16 ModelViewParmSubset_1.append()
    comp_4 ModelViewParmSubset_1.append()
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

    ModelViewParmSubset_4 = new SectionList()

    comp_1 ModelViewParmSubset_4.append()
    comp_41 ModelViewParmSubset_4.append()
    comp_28 ModelViewParmSubset_4.append()
    comp_15 ModelViewParmSubset_4.append()
    comp_2 ModelViewParmSubset_4.append()
    comp_43 ModelViewParmSubset_4.append()
    comp_42 ModelViewParmSubset_4.append()
    comp_30 ModelViewParmSubset_4.append()
    comp_29 ModelViewParmSubset_4.append()
    comp_17 ModelViewParmSubset_4.append()
    comp_16 ModelViewParmSubset_4.append()
    comp_4 ModelViewParmSubset_4.append()
    comp_3 ModelViewParmSubset_4.append()


    OneSecGrp_SectionRef_1 = new SectionList()

    comp_1 OneSecGrp_SectionRef_1.append()


    soma_group = new SectionList()

    comp_1 soma_group.append()


    prox_dend_soma = new SectionList()

    comp_1 prox_dend_soma.append()
    comp_41 prox_dend_soma.append()
    comp_28 prox_dend_soma.append()
    comp_15 prox_dend_soma.append()
    comp_2 prox_dend_soma.append()


    prox_mid_dends = new SectionList()

    comp_1 prox_mid_dends.append()
    comp_41 prox_mid_dends.append()
    comp_28 prox_mid_dends.append()
    comp_15 prox_mid_dends.append()
    comp_2 prox_mid_dends.append()
    comp_43 prox_mid_dends.append()
    comp_42 prox_mid_dends.append()
    comp_30 prox_mid_dends.append()
    comp_29 prox_mid_dends.append()
    comp_17 prox_mid_dends.append()
    comp_16 prox_mid_dends.append()
    comp_4 prox_mid_dends.append()
    comp_3 prox_mid_dends.append()


    ModelViewParmSubset_2 = new SectionList()

}

proc subsets_extra_1(){
    comp_54 ModelViewParmSubset_2.append()
    comp_55 ModelViewParmSubset_2.append()
    comp_58 ModelViewParmSubset_2.append()
    comp_56 ModelViewParmSubset_2.append()
    comp_59 ModelViewParmSubset_2.append()
    comp_57 ModelViewParmSubset_2.append()


    axon_group = new SectionList()

    comp_54 axon_group.append()
    comp_55 axon_group.append()
    comp_58 axon_group.append()
    comp_56 axon_group.append()
    comp_59 axon_group.append()
    comp_57 axon_group.append()


    prox_axon = new SectionList()

    comp_54 prox_axon.append()


    dendrite_group = new SectionList()

    comp_41 dendrite_group.append()
    comp_28 dendrite_group.append()
    comp_15 dendrite_group.append()
    comp_2 dendrite_group.append()
    comp_43 dendrite_group.append()
    comp_42 dendrite_group.append()
    comp_30 dendrite_group.append()
    comp_29 dendrite_group.append()
    comp_17 dendrite_group.append()
    comp_16 dendrite_group.append()
    comp_4 dendrite_group.append()
    comp_3 dendrite_group.append()
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

    ModelViewParmSubset_3 = new SectionList()

    comp_41 ModelViewParmSubset_3.append()
    comp_28 ModelViewParmSubset_3.append()
    comp_15 ModelViewParmSubset_3.append()
    comp_2 ModelViewParmSubset_3.append()
    comp_43 ModelViewParmSubset_3.append()
    comp_42 ModelViewParmSubset_3.append()
    comp_30 ModelViewParmSubset_3.append()
    comp_29 ModelViewParmSubset_3.append()
    comp_17 ModelViewParmSubset_3.append()
    comp_16 ModelViewParmSubset_3.append()
    comp_4 ModelViewParmSubset_3.append()
    comp_3 ModelViewParmSubset_3.append()
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}

proc subsets_extra_2(){
    comp_36 ModelViewParmSubset_3.append()
    comp_35 ModelViewParmSubset_3.append()
    comp_34 ModelViewParmSubset_3.append()
    comp_23 ModelViewParmSubset_3.append()
    comp_22 ModelViewParmSubset_3.append()
    comp_21 ModelViewParmSubset_3.append()
    comp_10 ModelViewParmSubset_3.append()
    comp_9 ModelViewParmSubset_3.append()
    comp_8 ModelViewParmSubset_3.append()
    comp_50 ModelViewParmSubset_3.append()
    comp_37 ModelViewParmSubset_3.append()
    comp_24 ModelViewParmSubset_3.append()
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

    prox_dend = new SectionList()

    comp_41 prox_dend.append()
    comp_28 prox_dend.append()
    comp_15 prox_dend.append()
    comp_2 prox_dend.append()


    mid_dend = new SectionList()

    comp_43 mid_dend.append()
    comp_42 mid_dend.append()
    comp_30 mid_dend.append()
    comp_29 mid_dend.append()
    comp_17 mid_dend.append()
    comp_16 mid_dend.append()
    comp_4 mid_dend.append()
    comp_3 mid_dend.append()
    comp_46 mid_dend.append()
    comp_45 mid_dend.append()
    comp_44 mid_dend.append()
    comp_33 mid_dend.append()
    comp_32 mid_dend.append()
    comp_31 mid_dend.append()
    comp_20 mid_dend.append()
    comp_19 mid_dend.append()
    comp_18 mid_dend.append()
    comp_7 mid_dend.append()
    comp_6 mid_dend.append()
    comp_5 mid_dend.append()


    ModelViewParmSubset_5 = new SectionList()

    comp_46 ModelViewParmSubset_5.append()
    comp_45 ModelViewParmSubset_5.append()
    comp_44 ModelViewParmSubset_5.append()
    comp_33 ModelViewParmSubset_5.append()
    comp_32 ModelViewParmSubset_5.append()
    comp_31 ModelViewParmSubset_5.append()
    comp_20 ModelViewParmSubset_5.append()
    comp_19 ModelViewParmSubset_5.append()
    comp_18 ModelViewParmSubset_5.append()
    comp_7 ModelViewParmSubset_5.append()
    comp_6 ModelViewParmSubset_5.append()
    comp_5 ModelViewParmSubset_5.append()
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

    gap_dend = new SectionList()

    comp_46 gap_dend.append()
    comp_45 gap_dend.append()
    comp_44 gap_dend.append()
}

proc subsets_extra_3(){
    comp_33 gap_dend.append()
    comp_32 gap_dend.append()
    comp_31 gap_dend.append()
    comp_20 gap_dend.append()
    comp_19 gap_dend.append()
    comp_18 gap_dend.append()
    comp_7 gap_dend.append()
    comp_6 gap_dend.append()
    comp_5 gap_dend.append()


    mid_tip_dends = new SectionList()

    comp_46 mid_tip_dends.append()
    comp_45 mid_tip_dends.append()
    comp_44 mid_tip_dends.append()
    comp_33 mid_tip_dends.append()
    comp_32 mid_tip_dends.append()
    comp_31 mid_tip_dends.append()
    comp_20 mid_tip_dends.append()
    comp_19 mid_tip_dends.append()
    comp_18 mid_tip_dends.append()
    comp_7 mid_tip_dends.append()
    comp_6 mid_tip_dends.append()
    comp_5 mid_tip_dends.append()
    comp_49 mid_tip_dends.append()
    comp_48 mid_tip_dends.append()
    comp_47 mid_tip_dends.append()
    comp_36 mid_tip_dends.append()
    comp_35 mid_tip_dends.append()
    comp_34 mid_tip_dends.append()
    comp_23 mid_tip_dends.append()
    comp_22 mid_tip_dends.append()
    comp_21 mid_tip_dends.append()
    comp_10 mid_tip_dends.append()
    comp_9 mid_tip_dends.append()
    comp_8 mid_tip_dends.append()


    mid_tip_plus_dends = new SectionList()

    comp_46 mid_tip_plus_dends.append()
    comp_45 mid_tip_plus_dends.append()
    comp_44 mid_tip_plus_dends.append()
    comp_33 mid_tip_plus_dends.append()
    comp_32 mid_tip_plus_dends.append()
    comp_31 mid_tip_plus_dends.append()
    comp_20 mid_tip_plus_dends.append()
    comp_19 mid_tip_plus_dends.append()
    comp_18 mid_tip_plus_dends.append()
    comp_7 mid_tip_plus_dends.append()
    comp_6 mid_tip_plus_dends.append()
    comp_5 mid_tip_plus_dends.append()
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

    mid_dist_dends = new SectionList()

    comp_46 mid_dist_dends.append()
    comp_45 mid_dist_dends.append()
    comp_44 mid_dist_dends.append()
    comp_33 mid_dist_dends.append()
    comp_32 mid_dist_dends.append()
    comp_31 mid_dist_dends.append()
    comp_20 mid_dist_dends.append()
    comp_19 mid_dist_dends.append()
    comp_18 mid_dist_dends.append()
    comp_7 mid_dist_dends.append()
    comp_6 mid_dist_dends.append()
    comp_5 mid_dist_dends.append()
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}

proc subsets_extra_4(){
    comp_39 mid_dist_dends.append()
    comp_26 mid_dist_dends.append()
    comp_13 mid_dist_dends.append()
    comp_53 mid_dist_dends.append()
    comp_40 mid_dist_dends.append()
    comp_27 mid_dist_dends.append()
    comp_14 mid_dist_dends.append()


    distal_axon = new SectionList()

    comp_59 distal_axon.append()
    comp_57 distal_axon.append()


    comp_1 all.append()
    comp_54 all.append()
    comp_41 all.append()
    comp_28 all.append()
    comp_15 all.append()
    comp_2 all.append()
    comp_55 all.append()
    comp_43 all.append()
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}

proc subsets_extra_5(){
}

proc geom() {
}

proc biophys() {
    forsec all cm = 1.0
    forsec ModelViewParmSubset_1 Ra = 200.0
    forsec ModelViewParmSubset_2 Ra = 100.0

    forsec all {         insert ka  { gmax_ka = 0.001 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec all {         insert k2  { gmax_k2 = 5.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert ar  { gmax_ar = 0.0
    m0_ar = 0.25 }          ear = -40.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert pas  { g_pas = 4.0E-5
    e_pas = -65.0 }    e_pas = -65.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert kahp_slower  { gmax_kahp_slower = 1.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert kc_fast  { gmax_kc_fast = 0.025 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert km  { gmax_km = 5.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_1 {         insert nap  { gmax_nap = 0.0 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert cat_a  { gmax_cat_a = 5.0E-5 }          ecat_a = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert kdr_fs  { gmax_kdr_fs = 0.1 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert naf2  { gmax_naf2 = 0.06
    a_naf2 = 0.0
    b_naf2 = 0.0
    c_naf2 = 0.0
    d_naf2 = 0.0
    fastNa_shift_naf2 = -2.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert cal  { gmax_cal = 1.0E-4 }          eca = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert cad  {
    beta_cad = 0.02
    phi_cad = 260000.0 }
    }

    forsec ModelViewParmSubset_2 {         insert kdr_fs  { gmax_kdr_fs = 0.4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert naf2  { gmax_naf2 = 0.4
    a_naf2 = 0.0
    b_naf2 = 0.0
    c_naf2 = 0.0
    d_naf2 = 0.0
    fastNa_shift_naf2 = -2.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert pas  { g_pas = 0.001
    e_pas = -65.0 }    e_pas = -65.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_3 {         insert cad  {
    beta_cad = 0.05
    phi_cad = 520000.0 }
    }

    forsec ModelViewParmSubset_5 {         insert naf2  { gmax_naf2 = 0.01
    a_naf2 = 0.0
    b_naf2 = 0.0
    c_naf2 = 0.0
    d_naf2 = 0.0
    fastNa_shift_naf2 = -2.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_5 {         insert cat_a  { gmax_cat_a = 0.002 }          ecat_a = 125.0  // note: this is val from ChannelML, may be reset later

    }

    addChanMechs_0()  // Spliting function to prevent errors when proc too big
}

proc addChanMechs_0() {

    forsec ModelViewParmSubset_5 {         insert kdr_fs  { gmax_kdr_fs = 0.01 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_5 {         insert cal  { gmax_cal = 2.0E-4 }          eca = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_3 {
        cai = 0.01
        cao = 2.0
    }

    forsec OneSecGrp_SectionRef_1 {
        cai = 0.01
        cao = 2.0
    }

    forsec all { ek = -100.0}

    forsec all { ena = 50.0}

}

proc geom_nseg() {
    comp_1 nseg = 2
    comp_54 nseg = 54
    comp_41 nseg = 10
    comp_28 nseg = 10
    comp_15 nseg = 10
    comp_2 nseg = 10
    comp_55 nseg = 58
    comp_43 nseg = 13
    comp_42 nseg = 13
    comp_30 nseg = 13
    comp_29 nseg = 13
    comp_17 nseg = 13
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}


proc position() { local i
    forsec all {
        for i = 0, n3d()-1 {
            pt3dchange(i, $1+x3d(i), $2+y3d(i), $3+z3d(i), diam3d(i))
        }
    }
    x = $1  y = $2  z = $3
}

proc connect2target() {   //$o1 target point process, $o2 returned NetCon

    comp_1 $o2 = new NetCon(&v(1), $o1)
}

proc toString() {
    strdef info
    sprint(info, "Cell ref: %s (%s), at: (%d, %d, %d)", reference, name, x, y, z)
    print info
}

proc netInfo() {
    strdef info
    sprint(info, "Cell reference: %s, type: %s", reference, type)
    print "--------  ",info
    print "    There are ", synlist.count(), " connections in ", synlist
    for i=0,synlist.count()-1 {
        print "        Connection from ", synlist.o[i].precell, " to: ", synlist.o[i].postcell
        print "        Pre:   Weight: ", synlist.o[i].weight, ", delay: ", synlist.o[i].delay, ", threshold: ", synlist.o[i].threshold
        print "        Post:  ", synlist.o[i].syn(), ", gmax: ", synlist.o[i].syn().gmax , ", e: ", synlist.o[i].syn().e , ", rise time: ", synlist.o[i].syn().tau_rise , ", decay time: ", synlist.o[i].syn().tau_decay
    print " "
    }



    print "--------  "
    print " "
}


endtemplate DeepLTSInter
