
//  ******************************************************
//
//     File generated by: neuroConstruct v1.7.1
//
//     Generally replicates hoc for Cell Type as exported from
//     NEURON's Cell Builder, together with some neuroConstruct
//     specific helper/info procedures, e.g. toString(), netInfo()
//
//  ******************************************************


begintemplate L23PyrFRB_varInit

public init, topol, basic_shape, subsets, geom, memb
public synlist, x, y, z, position, connect2target

public reference, type, description, name
strdef reference, type, description, name

public toString, netInfo

public all

objref synlist
objref all
objref stringFuncs

public ModelViewParmSubset_1
objref ModelViewParmSubset_1
public ModelViewParmSubset_3
objref ModelViewParmSubset_3
public ModelViewParmSubset_8
objref ModelViewParmSubset_8
public OneSecGrp_SectionRef_1
objref OneSecGrp_SectionRef_1
public soma_group
objref soma_group
public prox_dends_soma
objref prox_dends_soma
public ModelViewParmSubset_2
objref ModelViewParmSubset_2
public axon_group
objref axon_group
public prox_axon
objref prox_axon
public dendrite_group
objref dendrite_group
public ModelViewParmSubset_4
objref ModelViewParmSubset_4
public OneSecGrp_SectionRef_3
objref OneSecGrp_SectionRef_3
public ModelViewParmSubset_5
objref ModelViewParmSubset_5
public ModelViewParmSubset_7
objref ModelViewParmSubset_7
public most_prox_bas_dend
objref most_prox_bas_dend
public basal_obl_dends
objref basal_obl_dends
public basal_dends
objref basal_dends
public mid_dist_apic_dend
objref mid_dist_apic_dend
public ModelViewParmSubset_6
objref ModelViewParmSubset_6
public mid_dist_bas_dend
objref mid_dist_bas_dend
public LTS_dends
objref LTS_dends
public mid_apic_dends
objref mid_apic_dends
public distal_axon
objref distal_axon
public L6Pyr_dends
objref L6Pyr_dends
public TCR_dends
objref TCR_dends

proc init() {
    topol()
    subsets()
    geom()
    biophys()
    geom_nseg()
    synlist = new List()
    x = y = z = 0
    //reference = $s1
    //type = $s2
    //description = $s3

    strdef indexNum
    stringFuncs = new StringFunctions()
    stringFuncs.tail(reference, "_", indexNum)
    while (stringFuncs.substr( indexNum, "_")>=0) {
        stringFuncs.tail(indexNum, "_", indexNum)
    }

    sprint(name, "%s", type)
}

create comp_1
public comp_1
create comp_69
public comp_69
create comp_38
public comp_38
create comp_9
public comp_9
create comp_8
public comp_8
create comp_7
public comp_7
create comp_6
public comp_6
create comp_5
public comp_5
create comp_4
public comp_4
create comp_3
public comp_3
create comp_2
public comp_2
create comp_70
public comp_70
create comp_39
public comp_39
create comp_13
public comp_13
create comp_12
public comp_12
create comp_11
public comp_11
create comp_10
public comp_10
create comp_21
public comp_21
create comp_20
public comp_20
create comp_19
public comp_19
create comp_18
public comp_18
create comp_17
public comp_17
create comp_16
public comp_16
create comp_15
public comp_15
create comp_14
public comp_14
create comp_73
public comp_73
create comp_71
public comp_71
create comp_40
public comp_40
create comp_25
public comp_25
create comp_24
public comp_24
create comp_23
public comp_23
create comp_22
public comp_22
create comp_33
public comp_33
create comp_32
public comp_32
create comp_31
public comp_31
create comp_30
public comp_30
create comp_29
public comp_29
create comp_28
public comp_28
create comp_27
public comp_27
create comp_26
public comp_26
create comp_74
public comp_74
create comp_72
public comp_72
create comp_42
public comp_42
create comp_41
public comp_41
create comp_37
public comp_37
create comp_36
public comp_36
create comp_35
public comp_35
create comp_34
public comp_34
create comp_44
public comp_44
create comp_43
public comp_43
create comp_52
public comp_52
create comp_51
public comp_51
create comp_50
public comp_50
create comp_49
public comp_49
create comp_48
public comp_48
create comp_47
public comp_47
create comp_46
public comp_46
create comp_45
public comp_45
create comp_60
public comp_60
create comp_59
public comp_59
create comp_58
public comp_58
create comp_57
public comp_57
create comp_56
public comp_56
create comp_55
public comp_55
create comp_54
public comp_54
create comp_53
public comp_53
create comp_68
public comp_68
create comp_67
public comp_67
create comp_66
public comp_66
create comp_65
public comp_65
create comp_64
public comp_64
create comp_63
public comp_63
create comp_62
public comp_62
create comp_61
public comp_61

proc topol() {
    connect comp_69(0), comp_1(0.0)
    connect comp_38(0), comp_1(1.0)
    connect comp_9(0), comp_1(1.0)
    connect comp_8(0), comp_1(1.0)
    connect comp_7(0), comp_1(1.0)
    connect comp_6(0), comp_1(1.0)
    connect comp_5(0), comp_1(1.0)
    connect comp_4(0), comp_1(1.0)
    connect comp_3(0), comp_1(1.0)
    connect comp_2(0), comp_1(1.0)
    connect comp_70(0), comp_69(1.0)
    connect comp_39(0), comp_38(1.0)
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    basic_shape()
}

proc basic_shape() {
basic_shape_extra_0()
basic_shape_extra_1()
}

proc basic_shape_extra_0(){
    comp_1 {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 16.0) pt3dadd(0.0, 7.5, 0.0, 16.0)}
    comp_1 {pt3dadd(-0.0, 15.0, 0.0, 16.0)}
    comp_69 {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 1.8) pt3dadd(-0.0, -12.5, 0.0, 1.8)}
    comp_69 {pt3dadd(-0.0, -25.0, 0.0, 1.8)}
    comp_38 {pt3dclear() pt3dadd(-0.0, 15.0, 0.0, 8.0) pt3dadd(-0.0, 40.0, 0.0, 8.0)}
    comp_38 {pt3dadd(-0.0, 65.0, 0.0, 8.0)}
    comp_9 {pt3dclear() pt3dadd(-0.0, 15.0, 0.0, 1.0) pt3dadd(-0.0, -5.0, -15.0, 1.0)}
    comp_9 {pt3dadd(0.0, -25.0, -30.0, 1.0)}
    comp_8 {pt3dclear() pt3dadd(-0.0, 15.0, 0.0, 1.0) pt3dadd(15.0, -5.0, 0.0, 1.0)}
    comp_8 {pt3dadd(30.0, -25.0, 0.0, 1.0)}
    comp_7 {pt3dclear() pt3dadd(-0.0, 15.0, 0.0, 1.0) pt3dadd(-0.0, -5.0, 15.0, 1.0)}
    comp_7 {pt3dadd(0.0, -25.0, 30.0, 1.0)}
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}

proc basic_shape_extra_1(){
    comp_52 {pt3dclear() pt3dadd(38.94128, 257.10614, 0.0, 1.6) pt3dadd(56.875668, 274.52423, 0.0, 1.6)}
    comp_52 {pt3dadd(74.809364, 291.94165, 0.0, 1.6)}
    comp_51 {pt3dclear() pt3dadd(38.94128, 257.10614, 0.0, 1.6) pt3dadd(38.94128, 274.52423, -17.934387, 1.6)}
    comp_51 {pt3dadd(38.940094, 291.94177, -35.86782, 1.6)}
    comp_50 {pt3dclear() pt3dadd(38.94128, 257.10614, 0.0, 1.6) pt3dadd(38.94128, 274.52423, 17.934387, 1.6)}
    comp_50 {pt3dadd(38.941246, 291.94193, 35.868366, 1.6)}
    comp_49 {pt3dclear() pt3dadd(38.94128, 257.10614, 0.0, 1.6) pt3dadd(38.94185, 282.1057, 0.0, 1.6)}
    comp_49 {pt3dadd(38.9417, 307.10605, 0.0, 1.6)}
    comp_48 {pt3dclear() pt3dadd(-38.942097, 257.106, 0.0, 1.6) pt3dadd(-38.941532, 282.10562, 0.0, 1.6)}
    comp_48 {pt3dadd(-38.941692, 307.10593, 0.0, 1.6)}
    comp_47 {pt3dclear() pt3dadd(-38.942097, 257.106, 0.0, 1.6) pt3dadd(-38.94128, 274.52423, 17.934387, 1.6)}
    comp_47 {pt3dadd(-38.941307, 291.94186, 35.868286, 1.6)}
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}

proc subsets() { local i

    all = new SectionList()
subsets_extra_0()
subsets_extra_1()
subsets_extra_2()
subsets_extra_3()
subsets_extra_4()
subsets_extra_5()
subsets_extra_6()
subsets_extra_7()
}

proc subsets_extra_0(){


    ModelViewParmSubset_1 = new SectionList()

    comp_1 ModelViewParmSubset_1.append()
    comp_38 ModelViewParmSubset_1.append()
    comp_9 ModelViewParmSubset_1.append()
    comp_8 ModelViewParmSubset_1.append()
    comp_7 ModelViewParmSubset_1.append()
    comp_6 ModelViewParmSubset_1.append()
    comp_5 ModelViewParmSubset_1.append()
    comp_4 ModelViewParmSubset_1.append()
    comp_3 ModelViewParmSubset_1.append()
    comp_2 ModelViewParmSubset_1.append()
    comp_39 ModelViewParmSubset_1.append()
    comp_13 ModelViewParmSubset_1.append()
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

    ModelViewParmSubset_3 = new SectionList()

    comp_1 ModelViewParmSubset_3.append()
    comp_69 ModelViewParmSubset_3.append()
    comp_70 ModelViewParmSubset_3.append()
    comp_73 ModelViewParmSubset_3.append()
    comp_71 ModelViewParmSubset_3.append()
    comp_74 ModelViewParmSubset_3.append()
    comp_72 ModelViewParmSubset_3.append()


    ModelViewParmSubset_8 = new SectionList()

    comp_1 ModelViewParmSubset_8.append()
    comp_9 ModelViewParmSubset_8.append()
    comp_8 ModelViewParmSubset_8.append()
    comp_7 ModelViewParmSubset_8.append()
    comp_6 ModelViewParmSubset_8.append()
    comp_5 ModelViewParmSubset_8.append()
    comp_4 ModelViewParmSubset_8.append()
    comp_3 ModelViewParmSubset_8.append()
    comp_2 ModelViewParmSubset_8.append()
    comp_39 ModelViewParmSubset_8.append()
    comp_13 ModelViewParmSubset_8.append()
    comp_12 ModelViewParmSubset_8.append()
    comp_11 ModelViewParmSubset_8.append()
    comp_10 ModelViewParmSubset_8.append()


    OneSecGrp_SectionRef_1 = new SectionList()

    comp_1 OneSecGrp_SectionRef_1.append()


    soma_group = new SectionList()

}

proc subsets_extra_1(){
    comp_1 soma_group.append()


    prox_dends_soma = new SectionList()

    comp_1 prox_dends_soma.append()
    comp_38 prox_dends_soma.append()
    comp_9 prox_dends_soma.append()
    comp_8 prox_dends_soma.append()
    comp_7 prox_dends_soma.append()
    comp_6 prox_dends_soma.append()
    comp_5 prox_dends_soma.append()
    comp_4 prox_dends_soma.append()
    comp_3 prox_dends_soma.append()
    comp_2 prox_dends_soma.append()
    comp_39 prox_dends_soma.append()


    ModelViewParmSubset_2 = new SectionList()

    comp_69 ModelViewParmSubset_2.append()
    comp_70 ModelViewParmSubset_2.append()
    comp_73 ModelViewParmSubset_2.append()
    comp_71 ModelViewParmSubset_2.append()
    comp_74 ModelViewParmSubset_2.append()
    comp_72 ModelViewParmSubset_2.append()


    axon_group = new SectionList()

    comp_69 axon_group.append()
    comp_70 axon_group.append()
    comp_73 axon_group.append()
    comp_71 axon_group.append()
    comp_74 axon_group.append()
    comp_72 axon_group.append()


    prox_axon = new SectionList()

    comp_69 prox_axon.append()


    dendrite_group = new SectionList()

    comp_38 dendrite_group.append()
    comp_9 dendrite_group.append()
    comp_8 dendrite_group.append()
    comp_7 dendrite_group.append()
    comp_6 dendrite_group.append()
    comp_5 dendrite_group.append()
    comp_4 dendrite_group.append()
    comp_3 dendrite_group.append()
    comp_2 dendrite_group.append()
    comp_39 dendrite_group.append()
    comp_13 dendrite_group.append()
    comp_12 dendrite_group.append()
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}

proc subsets_extra_2(){
    comp_62 dendrite_group.append()
    comp_61 dendrite_group.append()


    ModelViewParmSubset_4 = new SectionList()

    comp_38 ModelViewParmSubset_4.append()
    comp_9 ModelViewParmSubset_4.append()
    comp_8 ModelViewParmSubset_4.append()
    comp_7 ModelViewParmSubset_4.append()
    comp_6 ModelViewParmSubset_4.append()
    comp_5 ModelViewParmSubset_4.append()
    comp_4 ModelViewParmSubset_4.append()
    comp_3 ModelViewParmSubset_4.append()
    comp_2 ModelViewParmSubset_4.append()
    comp_39 ModelViewParmSubset_4.append()
    comp_13 ModelViewParmSubset_4.append()
    comp_12 ModelViewParmSubset_4.append()
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

    OneSecGrp_SectionRef_3 = new SectionList()

    comp_38 OneSecGrp_SectionRef_3.append()


    ModelViewParmSubset_5 = new SectionList()

    comp_9 ModelViewParmSubset_5.append()
    comp_8 ModelViewParmSubset_5.append()
    comp_7 ModelViewParmSubset_5.append()
    comp_6 ModelViewParmSubset_5.append()
    comp_5 ModelViewParmSubset_5.append()
    comp_4 ModelViewParmSubset_5.append()
    comp_3 ModelViewParmSubset_5.append()
    comp_2 ModelViewParmSubset_5.append()
    comp_39 ModelViewParmSubset_5.append()
    comp_13 ModelViewParmSubset_5.append()
    comp_12 ModelViewParmSubset_5.append()
    comp_11 ModelViewParmSubset_5.append()
    comp_10 ModelViewParmSubset_5.append()
    comp_21 ModelViewParmSubset_5.append()
    comp_20 ModelViewParmSubset_5.append()
    comp_19 ModelViewParmSubset_5.append()
    comp_18 ModelViewParmSubset_5.append()
    comp_17 ModelViewParmSubset_5.append()
    comp_16 ModelViewParmSubset_5.append()
    comp_15 ModelViewParmSubset_5.append()
    comp_14 ModelViewParmSubset_5.append()
    comp_40 ModelViewParmSubset_5.append()
    comp_25 ModelViewParmSubset_5.append()
    comp_24 ModelViewParmSubset_5.append()
}

proc subsets_extra_3(){
    comp_23 ModelViewParmSubset_5.append()
    comp_22 ModelViewParmSubset_5.append()
    comp_33 ModelViewParmSubset_5.append()
    comp_32 ModelViewParmSubset_5.append()
    comp_31 ModelViewParmSubset_5.append()
    comp_30 ModelViewParmSubset_5.append()
    comp_29 ModelViewParmSubset_5.append()
    comp_28 ModelViewParmSubset_5.append()
    comp_27 ModelViewParmSubset_5.append()
    comp_26 ModelViewParmSubset_5.append()
    comp_42 ModelViewParmSubset_5.append()
    comp_41 ModelViewParmSubset_5.append()
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

    ModelViewParmSubset_7 = new SectionList()

    comp_9 ModelViewParmSubset_7.append()
    comp_8 ModelViewParmSubset_7.append()
    comp_7 ModelViewParmSubset_7.append()
    comp_6 ModelViewParmSubset_7.append()
    comp_5 ModelViewParmSubset_7.append()
    comp_4 ModelViewParmSubset_7.append()
    comp_3 ModelViewParmSubset_7.append()
    comp_2 ModelViewParmSubset_7.append()
    comp_39 ModelViewParmSubset_7.append()
    comp_13 ModelViewParmSubset_7.append()
    comp_12 ModelViewParmSubset_7.append()
    comp_11 ModelViewParmSubset_7.append()
    comp_10 ModelViewParmSubset_7.append()


    most_prox_bas_dend = new SectionList()

    comp_9 most_prox_bas_dend.append()
    comp_8 most_prox_bas_dend.append()
    comp_7 most_prox_bas_dend.append()
    comp_6 most_prox_bas_dend.append()
    comp_5 most_prox_bas_dend.append()
    comp_4 most_prox_bas_dend.append()
    comp_3 most_prox_bas_dend.append()
    comp_2 most_prox_bas_dend.append()


    basal_obl_dends = new SectionList()

    comp_9 basal_obl_dends.append()
    comp_8 basal_obl_dends.append()
    comp_7 basal_obl_dends.append()
    comp_6 basal_obl_dends.append()
    comp_5 basal_obl_dends.append()
    comp_4 basal_obl_dends.append()
    comp_3 basal_obl_dends.append()
    comp_2 basal_obl_dends.append()
    comp_13 basal_obl_dends.append()
    comp_12 basal_obl_dends.append()
    comp_11 basal_obl_dends.append()
    comp_10 basal_obl_dends.append()
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}

proc subsets_extra_4(){
    comp_26 basal_obl_dends.append()
    comp_37 basal_obl_dends.append()
    comp_36 basal_obl_dends.append()
    comp_35 basal_obl_dends.append()
    comp_34 basal_obl_dends.append()


    basal_dends = new SectionList()

    comp_9 basal_dends.append()
    comp_8 basal_dends.append()
    comp_7 basal_dends.append()
    comp_6 basal_dends.append()
    comp_5 basal_dends.append()
    comp_4 basal_dends.append()
    comp_3 basal_dends.append()
    comp_2 basal_dends.append()
    comp_21 basal_dends.append()
    comp_20 basal_dends.append()
    comp_19 basal_dends.append()
    comp_18 basal_dends.append()
    comp_17 basal_dends.append()
    comp_16 basal_dends.append()
    comp_15 basal_dends.append()
    comp_14 basal_dends.append()
    comp_33 basal_dends.append()
    comp_32 basal_dends.append()
    comp_31 basal_dends.append()
    comp_30 basal_dends.append()
    comp_29 basal_dends.append()
    comp_28 basal_dends.append()
    comp_27 basal_dends.append()
    comp_26 basal_dends.append()


    mid_dist_apic_dend = new SectionList()

    comp_39 mid_dist_apic_dend.append()
    comp_13 mid_dist_apic_dend.append()
    comp_12 mid_dist_apic_dend.append()
    comp_11 mid_dist_apic_dend.append()
    comp_10 mid_dist_apic_dend.append()
    comp_40 mid_dist_apic_dend.append()
    comp_25 mid_dist_apic_dend.append()
    comp_24 mid_dist_apic_dend.append()
    comp_23 mid_dist_apic_dend.append()
    comp_22 mid_dist_apic_dend.append()
    comp_42 mid_dist_apic_dend.append()
    comp_41 mid_dist_apic_dend.append()
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

    ModelViewParmSubset_6 = new SectionList()

    comp_21 ModelViewParmSubset_6.append()
    comp_20 ModelViewParmSubset_6.append()
    comp_19 ModelViewParmSubset_6.append()
    comp_18 ModelViewParmSubset_6.append()
    comp_17 ModelViewParmSubset_6.append()
    comp_16 ModelViewParmSubset_6.append()
    comp_15 ModelViewParmSubset_6.append()
    comp_14 ModelViewParmSubset_6.append()
    comp_40 ModelViewParmSubset_6.append()
    comp_25 ModelViewParmSubset_6.append()
    comp_24 ModelViewParmSubset_6.append()
    comp_23 ModelViewParmSubset_6.append()
    comp_22 ModelViewParmSubset_6.append()
    comp_33 ModelViewParmSubset_6.append()
    comp_32 ModelViewParmSubset_6.append()
    comp_31 ModelViewParmSubset_6.append()
    comp_30 ModelViewParmSubset_6.append()
    comp_29 ModelViewParmSubset_6.append()
    comp_28 ModelViewParmSubset_6.append()
    comp_27 ModelViewParmSubset_6.append()
    comp_26 ModelViewParmSubset_6.append()
    comp_42 ModelViewParmSubset_6.append()
    comp_41 ModelViewParmSubset_6.append()
}

proc subsets_extra_5(){
    comp_37 ModelViewParmSubset_6.append()
    comp_36 ModelViewParmSubset_6.append()
    comp_35 ModelViewParmSubset_6.append()
    comp_34 ModelViewParmSubset_6.append()
    comp_44 ModelViewParmSubset_6.append()
    comp_43 ModelViewParmSubset_6.append()
    comp_52 ModelViewParmSubset_6.append()
    comp_51 ModelViewParmSubset_6.append()
    comp_50 ModelViewParmSubset_6.append()
    comp_49 ModelViewParmSubset_6.append()
    comp_48 ModelViewParmSubset_6.append()
    comp_47 ModelViewParmSubset_6.append()
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

    mid_dist_bas_dend = new SectionList()

    comp_21 mid_dist_bas_dend.append()
    comp_20 mid_dist_bas_dend.append()
    comp_19 mid_dist_bas_dend.append()
    comp_18 mid_dist_bas_dend.append()
    comp_17 mid_dist_bas_dend.append()
    comp_16 mid_dist_bas_dend.append()
    comp_15 mid_dist_bas_dend.append()
    comp_14 mid_dist_bas_dend.append()
    comp_33 mid_dist_bas_dend.append()
    comp_32 mid_dist_bas_dend.append()
    comp_31 mid_dist_bas_dend.append()
    comp_30 mid_dist_bas_dend.append()
    comp_29 mid_dist_bas_dend.append()
    comp_28 mid_dist_bas_dend.append()
    comp_27 mid_dist_bas_dend.append()
    comp_26 mid_dist_bas_dend.append()


    LTS_dends = new SectionList()

    comp_21 LTS_dends.append()
    comp_20 LTS_dends.append()
    comp_19 LTS_dends.append()
    comp_18 LTS_dends.append()
    comp_17 LTS_dends.append()
    comp_16 LTS_dends.append()
    comp_15 LTS_dends.append()
    comp_14 LTS_dends.append()
    comp_40 LTS_dends.append()
    comp_25 LTS_dends.append()
    comp_24 LTS_dends.append()
    comp_23 LTS_dends.append()
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}

proc subsets_extra_6(){
    comp_63 LTS_dends.append()
    comp_62 LTS_dends.append()
    comp_61 LTS_dends.append()


    mid_apic_dends = new SectionList()

    comp_40 mid_apic_dends.append()
    comp_42 mid_apic_dends.append()
    comp_41 mid_apic_dends.append()
    comp_44 mid_apic_dends.append()
    comp_43 mid_apic_dends.append()
    comp_52 mid_apic_dends.append()
    comp_51 mid_apic_dends.append()
    comp_50 mid_apic_dends.append()
    comp_49 mid_apic_dends.append()
    comp_48 mid_apic_dends.append()
    comp_47 mid_apic_dends.append()
    comp_46 mid_apic_dends.append()
    comp_45 mid_apic_dends.append()


    distal_axon = new SectionList()

    comp_74 distal_axon.append()
    comp_72 distal_axon.append()


    L6Pyr_dends = new SectionList()

    comp_42 L6Pyr_dends.append()
    comp_41 L6Pyr_dends.append()
    comp_44 L6Pyr_dends.append()
    comp_43 L6Pyr_dends.append()


    TCR_dends = new SectionList()

    comp_52 TCR_dends.append()
    comp_51 TCR_dends.append()
    comp_50 TCR_dends.append()
    comp_49 TCR_dends.append()
    comp_48 TCR_dends.append()
    comp_47 TCR_dends.append()
    comp_46 TCR_dends.append()
    comp_45 TCR_dends.append()
    comp_60 TCR_dends.append()
    comp_59 TCR_dends.append()
    comp_58 TCR_dends.append()
    comp_57 TCR_dends.append()
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}

proc subsets_extra_7(){
    comp_36 all.append()
    comp_35 all.append()
    comp_34 all.append()
    comp_44 all.append()
    comp_43 all.append()
    comp_52 all.append()
    comp_51 all.append()
    comp_50 all.append()
    comp_49 all.append()
    comp_48 all.append()
    comp_47 all.append()
    comp_46 all.append()
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}

proc geom() {
}

proc biophys() {
    forsec ModelViewParmSubset_1 Ra = 250.0
    forsec ModelViewParmSubset_3 cm = 0.9
    forsec ModelViewParmSubset_2 Ra = 100.0
    forsec ModelViewParmSubset_4 cm = 1.8

    forsec ModelViewParmSubset_3 {         insert k2  { gmax_k2 = 1.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_8 {         insert nap  { gmax_nap = 4.8E-4 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_8 {         insert naf  { gmax_naf = 0.1875
    a_naf = 0.0
    b_naf = 0.0
    c_naf = 0.0
    d_naf = 0.0
    fastNa_shift_naf = -3.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert kdr  { gmax_kdr = 0.125 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert cad  {
    beta_cad = 0.01
    phi_cad = 26000.0 }
    }

    forsec OneSecGrp_SectionRef_1 {         insert km  { gmax_km = 0.0075 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert cat  { gmax_cat = 1.0E-4 }          ecat = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert kahp  { gmax_kahp = 1.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert kc  { gmax_kc = 0.0045 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert cal  { gmax_cal = 0.001 }          eca = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert ar  { gmax_ar = 2.5E-4
    m0_ar = 0.25 }          ear = -35.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert ka  { gmax_ka = 0.03 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_1 {         insert pas  { g_pas = 2.0E-5
    e_pas = -70.0 }    e_pas = -70.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert ka  { gmax_ka = 0.002 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert pas  { g_pas = 0.001
    e_pas = -70.0 }    e_pas = -70.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert naf  { gmax_naf = 0.4
    a_naf = 0.0
    b_naf = 0.0
    c_naf = 0.0
    d_naf = 0.0
    fastNa_shift_naf = -3.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_2 {         insert kdr  { gmax_kdr = 0.4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert kc  { gmax_kc = 0.009 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert ar  { gmax_ar = 5.0E-4
    m0_ar = 0.25 }          ear = -35.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert cad  {
    beta_cad = 0.05
    phi_cad = 52000.0 }
    }

    addChanMechs_0()  // Spliting function to prevent errors when proc too big
}

proc addChanMechs_0() {

    forsec ModelViewParmSubset_4 {         insert cal  { gmax_cal = 0.002 }          eca = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert kahp  { gmax_kahp = 2.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert pas  { g_pas = 4.0E-5
    e_pas = -70.0 }    e_pas = -70.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert cat  { gmax_cat = 2.0E-4 }          ecat = 125.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert km  { gmax_km = 0.015 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {         insert k2  { gmax_k2 = 2.0E-4 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_3 {         insert kdr  { gmax_kdr = 0.25 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_3 {         insert nap  { gmax_nap = 6.4E-4 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_3 {         insert ka  { gmax_ka = 0.06 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec OneSecGrp_SectionRef_3 {         insert naf  { gmax_naf = 0.25
    a_naf = 0.0
    b_naf = 0.0
    c_naf = 0.0
    d_naf = 0.0
    fastNa_shift_naf = -3.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_5 {         insert ka  { gmax_ka = 0.004 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_7 {         insert kdr  { gmax_kdr = 0.1875 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_6 {         insert naf  { gmax_naf = 0.025
    a_naf = 0.0
    b_naf = 0.0
    c_naf = 0.0
    d_naf = 0.0
    fastNa_shift_naf = -3.5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_6 {         insert nap  { gmax_nap = 6.4E-5 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_6 {         insert kdr  { gmax_kdr = 0.0125 }          ek = -95.0  // note: this is val from ChannelML, may be reset later

    }

    forsec ModelViewParmSubset_4 {
        cai = 0.01
        cao = 2.0
    }

    forsec OneSecGrp_SectionRef_1 {
        cai = 0.01
        cao = 2.0
    }

    forsec all { ena = 50.0}

    forsec all { ek = -95.0}

}

proc geom_nseg() {
    comp_1 nseg = 6
    comp_69 nseg = 12
    comp_38 nseg = 4
    comp_9 nseg = 10
    comp_8 nseg = 10
    comp_7 nseg = 10
    comp_6 nseg = 10
    comp_5 nseg = 10
    comp_4 nseg = 10
    comp_3 nseg = 10
    comp_2 nseg = 11
    comp_70 nseg = 27
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}


proc position() { local i
    forsec all {
        for i = 0, n3d()-1 {
            pt3dchange(i, $1+x3d(i), $2+y3d(i), $3+z3d(i), diam3d(i))
        }
    }
    x = $1  y = $2  z = $3
}

proc connect2target() {   //$o1 target point process, $o2 returned NetCon

    comp_1 $o2 = new NetCon(&v(1), $o1)
}

proc toString() {
    strdef info
    sprint(info, "Cell ref: %s (%s), at: (%d, %d, %d)", reference, name, x, y, z)
    print info
}

proc netInfo() {
    strdef info
    sprint(info, "Cell reference: %s, type: %s", reference, type)
    print "--------  ",info
    print "    There are ", synlist.count(), " connections in ", synlist
    for i=0,synlist.count()-1 {
        print "        Connection from ", synlist.o[i].precell, " to: ", synlist.o[i].postcell
        print "        Pre:   Weight: ", synlist.o[i].weight, ", delay: ", synlist.o[i].delay, ", threshold: ", synlist.o[i].threshold
        print "        Post:  ", synlist.o[i].syn(), ", gmax: ", synlist.o[i].syn().gmax , ", e: ", synlist.o[i].syn().e , ", rise time: ", synlist.o[i].syn().tau_rise , ", decay time: ", synlist.o[i].syn().tau_decay
    print " "
    }



    print "--------  "
    print " "
}


endtemplate L23PyrFRB_varInit
